/* This script will batch-convert to .tif every .czi file in all subfolders of the folder you specify (interactively).
 * Only the highest-resolution series (the first series and any other first ones if acquisition was split in several parts)
 * will be converted.
 * Contrast is enhanced with 5% saturation before saving.
 * Images are saved as 8-bit.
 * 
 * written by Paola Patella, PhD. 
 * FMI, Basel, March 2021
 */
 
run("Bio-Formats Macro Extensions");
setBatchMode(true);

dir = getDirectory("Choose a Directory ");
count = 0;
countFiles(dir);
print("files to process = " + count);

n = 0;
processFiles(dir);

   
   function countFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              countFiles(""+dir+list[i]);
          else
              count++;
      }
  }

   function processFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              processFiles(""+dir+list[i]);
          else {
             showProgress(n++, count);
             path = dir+list[i];
             processFile(path);
          }
      }
  }

  function processFile(path) {
       if (endsWith(path, ".czi")) {
			Ext.setId(path);
       		Ext.getSeriesCount(seriesCount); //zero-based
       		print("series count = " + seriesCount);

			Ext.getMetadataValue("Scaling|Distance|Value #1", value);
			print(value);
       		//appendingSt = "_" +value+ "mmppx.tif";

       		seriesNumber = 1;
       		Ext.setSeries(0); //note that the index in this case is zero-based. This corresponds to series 1.
			Ext.getSizeX(prevSizeX);
			Ext.getSizeY(prevSizeY);
			Ext.setSeries(1); //note that the index in this case is zero-based. This corresponds to series 2.
			Ext.getSizeX(seriestwoX);
			downsamplingFactor = seriestwoX/prevSizeX;
			value = value/downsamplingFactor;
			
			appendingSt = "_" +value+ "mmppx.tif";
			
			Ext.setSeries(1); //note that the index in this case is zero-based. This corresponds to series 2.
			seriesNumberUse = seriesNumber+1;
       		seriesLabel = "series_"+seriesNumberUse;
       		print("opening " + seriesLabel);   
       		openingString = "open=" +path +" color_mode=Default rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT " +seriesLabel;
       		//print(openingString);
       		run("Bio-Formats Importer", openingString);
       		saveTiff(path, seriesNumberUse, appendingSt);
			
			
			
			for (seriesNumber=2; seriesNumber<=seriesCount-2; seriesNumber++) {
				//print(seriesNumber);
				Ext.setSeries(seriesNumber-1);
				Ext.getSizeX(sizeX);
				Ext.getSizeY(sizeY);
				prevsz = prevSizeX*prevSizeY;
				currsz = sizeX*sizeY;
				//print("previous squaresize: " +prevsz );
				//print("current squaresize: " +currsz );
				if (prevsz < currsz) {
					// get the next downsampled one then
					Ext.setSeries(seriesNumber); // this is zero-based
					seriesNumberUse = seriesNumber+1;
					seriesLabel = "series_"+seriesNumberUse;
       				print("opening " + seriesLabel);   
					openingString = "open=[&path] color_mode=Default rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT " +seriesLabel; 
       				//print(openingString);
       				run("Bio-Formats Importer", openingString);
       				saveTiff(path, seriesNumberUse, appendingSt);
				}
				prevSizeX = sizeX;
				prevSizeY = sizeY;
			}	

			// also save the label, which is always the second to last
			appendingSt = "label.jpg";
			seriesNumberUse = seriesCount-1;
			seriesLabel = "series_"+seriesNumberUse;
       		print("opening " + seriesLabel);   
			openingString = "open=[&path] color_mode=Default rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT " +seriesLabel; 
       		run("Bio-Formats Importer", openingString);
			run("8-bit");
			filenameWrite = path+appendingSt;
			saveAs("Jpeg", filenameWrite);
			close();
      }
  }

  function saveTiff(path, seriesNumber, appendingSt) {
	getDimensions(width, height, channels, slices, frames);
	// if it's a multi channel image
	if (channels > 1) run("Split Channels");

	for ( c = 1; c <= channels; c++){
		selectImage(c);
		run("Enhance Contrast", "saturated=0.05");
	}
	run("Images to Stack", "name=Stack title=[] use");
	run("8-bit");

	filenameWrite = path+seriesNumber+appendingSt;
	saveAs("Tiff", filenameWrite);
	close();
  }
  
